PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = pyo
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expName, add_info(expInfo), expInfo['date'])
  Experiment info = {'participant': '', 'gender': 'f', 'date_of_birth': 'DD.MM.YYYY', 'ethnicity': 'asian', 'diagnosis': 'control', 'artifact_recording': '1', 'eyesclosed_recording': '1'}
  Full-screen window = False
  Monitor = testMonitor
  Save wide csv file = False
  Screen = 1
  Units = height
  Use version = 2021.2.2
  Window size (pixels) = [1920, 1080]
  expName = resting_task_v2021
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine welcome_screen
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    CodeComponent welcome_screen_code
      Code Type = Py
      Before Experiment:
        # Additional Info for data file name
        def add_info(expInfo):
            out = 'eyeop'
            if int(expInfo['eyesclosed_recording']):
                out += '_eyecl'
            if int(expInfo['artifact_recording']):
                out += '_artfrec'
            return out
      Begin Experiment:
        # Change this instruction according to your setup!
        continue_with_button_text = 'Continue with SPACE'
    TextComponent welcome_screen_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Herzlich Willkommen und vielen Dank für Ihre Teilnahme an diesem Experiment!
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    TextComponent welcome_screen_cwb_text
      letterHeight = 0.05
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $continue_with_button_text
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    KeyboardComponent welcome_screen_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine artifact_instruction
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    CodeComponent artifact_instruction_code
      Code Type = Py
    TextComponent artifact_instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Im Folgenden würden wir Sie bitten ein paar Störquellen aufzunehmen. Dieses Signal hilft uns später im richtigen Signal diese Störungen zu eliminieren.
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    TextComponent artifact_instruction_cwb_text
      letterHeight = 0.03
      pos = (0, -0.46)
      startVal [time (s)] = 0.0
      text [set every repeat] = $continue_with_button_text
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    KeyboardComponent artifact_instruction_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine artifact_explainer
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    CodeComponent artifact_explainer_code
      Code Type = Py
      Begin Experiment:
        artifact_running = False
      Begin Routine:
        artifact_running = True
        if not int(expInfo['artifact_recording']):
            continueRoutine = False
            tThisFlipGlobal = win.getFutureFlipTime(clock=None)
    TextboxComponent artifact_explainer_textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
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    TextComponent artifact_explainer_cwb_text
      letterHeight = 0.05
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = $continue_with_button_text
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    KeyboardComponent artifact_explainer_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine countdown
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    CodeComponent countdown_code
      Code Type = Py
      Begin Experiment:
        # count down from x (each number lasts 1 second)
        countdown_from = 3
        countdown_time = 1.0
      Begin Routine:
        if (not int(expInfo['artifact_recording'])) and (artifact_running) or (eyesclosed_running):
            continueRoutine = False
            tThisFlipGlobal = win.getFutureFlipTime(clock=None)

        countdown_counter = countdown_from
        add_time = countdown_time
      Each Frame:
        if (t >= add_time - frameTolerance):
            countdown_counter -= 1
            add_time += countdown_time
    TextComponent countdown_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(countdown_time*countdown_from)
      text [set every frame] = $countdown_counter
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  Routine artifact_recording
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    CodeComponent artifact_recording_code
      Code Type = Py
      Begin Routine:
        artifact_running = False
        if not int(expInfo['artifact_recording']):
            continueRoutine = False
            tThisFlipGlobal = win.getFutureFlipTime(clock=None)
    TextComponent artifact_recording_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $short
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    TextComponent artifact_recording_empty_text
      letterHeight = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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  Routine eyesopen_instruction
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    CodeComponent eyesopen_instruction_code
      Code Type = Py
    TextboxComponent eyesopen_instruction_textbox
      bold = False
      editable = False
      flipHoriz = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
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    TextComponent eyesopen_instruction_cwb_text
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Any text

        including line breaks
    KeyboardComponent eyesopen_instruction_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine eyesopen_recording
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    CodeComponent eyesopen_recording_code
      Code Type = Py
    PolygonComponent eyesopen_recording_polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine eyesclosed_recording
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    CodeComponent eyesclosed_recording_code
      Code Type = Py
      Begin Routine:
        eyesclosed_running = False
        if not int(expInfo['eyesclosed_recording']):
            continueRoutine = False
            tThisFlipGlobal = win.getFutureFlipTime(clock=None)
    PolygonComponent eyesclosed_recording_polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    SoundComponent eyesclosed_recording_start_sound
      forceEndRoutine = False
      sound = 660
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      volume = 0.2
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    SoundComponent eyesclosed_recording_stop_sound
      forceEndRoutine = False
      sound = 220
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 1.0
      volume = 0.2
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  Routine eyesclosed_instruction
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    CodeComponent eyesclosed_instruction_code
      Code Type = Py
      Begin Experiment:
        eyesclosed_running = False
      Begin Routine:
        eyesclosed_running = True
        if not int(expInfo['eyesclosed_recording']):
            continueRoutine = False
            tThisFlipGlobal = win.getFutureFlipTime(clock=None)
    TextboxComponent eyesclosed_instruction_textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
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    TextComponent eyesclosed_instruction_cwb_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $continue_with_button_text
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    KeyboardComponent eyesclosed_instruction_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye_screen
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    TextComponent goodbye_screen_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Das war´s auch schon...

        Vielen Dank für Ihre Teilnahme!

        Bitte warten sie auf weitere Anweisungen der Versuchsleitung.
    TextComponent goodbye_screen_cwb_text
      letterHeight = 0.05
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $continue_with_button_text
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    KeyboardComponent goodbye_screen_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome_screen
  Routine artifact_instruction
  LoopInitiator loop_artifact_recording loopType="TrialHandler"
    conditionsFile = instructions\artifact_instruction.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('slide', 0), ('text', 'Im Folgenden würden wir Sie bitten sobald Sie auf dem Bildschirm aufgefordert werden \n\n <c=#000000>mit den Augen zu rollen</c> \n\n Fahren Sie damit fort bis Sie eine neue Anweisungen erhalten. \n\n'), ('short', 'Augen rollen')]),
      OrderedDict([('slide', 1), ('text', 'Im Folgenden würden wir Sie bitten sobald Sie auf dem Bildschirm aufgefordert werden \n\n <c=#000000>mit den Augen zu blinzeln</c> \n\n Fahren Sie damit fort bis Sie eine neue Anweisungen erhalten. \n\n'), ('short', 'Blinzeln')]),
      OrderedDict([('slide', 2), ('text', 'Im Folgenden würden wir Sie bitten sobald Sie auf dem Bildschirm aufgefordert werden \n\n <c=#000000>die Augen von Links nach Rechts hin und her zu bewegen</c> \n\n Fahren Sie damit fort bis Sie eine neue Anweisungen erhalten. \n\n'), ('short', 'Augen hin und her bewegen')]),
      OrderedDict([('slide', 3), ('text', 'Im Folgenden würden wir Sie bitten sobald Sie auf dem Bildschirm aufgefordert werden \n\n <c=#000000>den Kiefer anzuspannend und mit den Zähnen zu knirschen</c> \n\n Fahren Sie damit fort bis Sie eine neue Anweisungen erhalten. \n\n'), ('short', 'Kiefer anspannen und knirschen')]),
      OrderedDict([('slide', 4), ('text', 'Im Folgenden würden wir Sie bitten sobald Sie auf dem Bildschirm aufgefordert werden \n\n <c=#000000>mehrfach hintereinander zu schlucken</c> \n\n Fahren Sie damit fort bis Sie eine neue Anweisungen erhalten. \n\n'), ('short', 'Schlucken')])]
    Routine artifact_explainer
    Routine countdown
    Routine artifact_recording
  LoopTerminator loop_artifact_recording
  LoopInitiator loop_eyesopen_instruction loopType="TrialHandler"
    conditionsFile = instructions\eyesopen_instruction.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('slide', 0), ('text', 'Vielen Dank, für Ihre Teilnahme! \n\nDamit die Messung ein Erfolg wird, benötigen wir Ihre Mithilfe:\n\nBitte sitzen Sie ruhig und entspannt und <c=#000000>vermeiden Sie unnötige Bewegungen </c>sowie häufiges <c=#000000>Blinzeln</c>. Lassen Sie automatisches Blinzeln jedoch zu.\n\n Wenn es unbequem wird, richten Sie sich kurz neu aus, um wieder eine ruhige Position zu finden. \n\nFalls Sie fragen haben, wenden Sie sich bitte an die Studienleitung.\n\nSonst können Sie mit der blauen Taste fortfahren.')]),
      OrderedDict([('slide', 1), ('text', 'Im folgenden nehmen wir eine 5-minütige Ruhemessung vor.\n\nSchauen Sie bitte dabei auf das Kreuz in der Mitte des Bildschirms. \nLassen Sie dabei Ihre Gedanken ziehen und denken Sie an nichts Bestimmtes.\n\nFalls Sie fragen haben, wenden Sie sich bitte an die Studienleitung.\n\nSonst können Sie mit der blauen Taste fortfahren.')])]
    Routine eyesopen_instruction
  LoopTerminator loop_eyesopen_instruction
  Routine countdown
  Routine eyesopen_recording
  LoopInitiator loop_eyesclosed_instruction loopType="TrialHandler"
    conditionsFile = instructions\eyesclosed_instruction.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('slide', 0), ('text', 'Vielen Dank, für Ihre Teilnahme! \n\nDamit die Messung ein Erfolg wird, benötigen wir Ihre Mithilfe:\n\nBitte sitzen Sie ruhig und entspannt und <c=#000000>vermeiden Sie unnötige Bewegungen </c>sowie häufiges <c=#000000>Blinzeln</c>. Lassen Sie automatisches Blinzeln jedoch zu.\n\n Wenn es unbequem wird, richten Sie sich kurz neu aus, um wieder eine ruhige Position zu finden. \n\nFalls Sie fragen haben, wenden Sie sich bitte an die Studienleitung.\n\nSonst können Sie mit der blauen Taste fortfahren.')]),
      OrderedDict([('slide', 1), ('text', 'Im folgenden nehmen wir eine 5-minütige Ruhemessung vor.\n\nSchauen Sie bitte dabei auf das Kreuz in der Mitte des Bildschirms. \nLassen Sie dabei Ihre Gedanken ziehen und denken Sie an nichts Bestimmtes.\n\nFalls Sie fragen haben, wenden Sie sich bitte an die Studienleitung.\n\nSonst können Sie mit der blauen Taste fortfahren.')])]
    Routine eyesclosed_instruction
  LoopTerminator loop_eyesclosed_instruction
  Routine countdown
  Routine eyesclosed_recording
  Routine goodbye_screen
